{
    "analysis_tasks": [
        {
            "task": "Decode",
            "module": "merlin.analysis.decode",
            "parameters": {
                "preprocess_task": "DeconvolutionPreprocess",
                "optimize_task": "Optimize10",
                "global_align_task": "SimpleGlobalAlignment",
                "minimum_area": 4,
                "lowpass_sigma": 1,
                "crop_width": 102,
                "distance_threshold":0.65
            }
        },
        {
            "task": "AdaptiveFilterBarcodes",
            "module": "merlin.analysis.filterbarcodes",
            "parameters": {
                "misidentification_rate": 0.1,
                "decode_task": "Decode",
                "adaptive_task": "GenerateAdaptiveThreshold"
            }
        },
        {
            "task": "ExportBarcodes",
            "module": "merlin.analysis.exportbarcodes",
            "parameters": {
                "filter_task": "AdaptiveFilterBarcodes",
                "columns": ["barcode_id", "global_x", "global_y", "global_z",
                    "x", "y", "fov", "cell_index"],
                "exclude_blanks": false
            }
        }
    ]
}
